# Generated by Configurator on Mon Jul 01 14:44:32 EDT 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,COM14,SerialManager,COM14
Device,COM17,SerialManager,COM17
Device,XYStage,Prior,XYStage
Device,ZStage,Prior,ZStage
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,Fluoshutter,Prior,Shutter-1
Device,BFShutter,Prior,Shutter-2
Device,Shutter_A_10_2,SutterLambda,Shutter-A 10-2
Device,Wheel_A,SutterLambda,Wheel-A
Device,Shutter_B_10_2,SutterLambda,Shutter-B 10-2
Device,Wheel_B,SutterLambda,Wheel-B

# Pre-init settings for devices
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,9600
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1
Property,COM14,AnswerTimeout,500.0000
Property,COM14,BaudRate,9600
Property,COM14,DTR,Disable
Property,COM14,DataBits,8
Property,COM14,DelayBetweenCharsMs,0.0000
Property,COM14,Fast USB to Serial,Enable
Property,COM14,Handshaking,Off
Property,COM14,Parity,None
Property,COM14,StopBits,1
Property,COM14,Verbose,1
Property,COM17,AnswerTimeout,500.0000
Property,COM17,BaudRate,9600
Property,COM17,DTR,Disable
Property,COM17,DataBits,8
Property,COM17,DelayBetweenCharsMs,0.0000
Property,COM17,Fast USB to Serial,Enable
Property,COM17,Handshaking,Off
Property,COM17,Parity,None
Property,COM17,StopBits,1
Property,COM17,Verbose,0
Property,XYStage,Port,COM14
Property,ZStage,Port,COM14
Property,Fluoshutter,Port,COM14
Property,BFShutter,Port,COM14
Property,Shutter_A_10_2,Port,COM17
Property,Wheel_A,Port,COM17
Property,Wheel_A,Timeout(ms),2000
Property,Shutter_B_10_2,Port,COM17
Property,Wheel_B,Port,COM17
Property,Wheel_B,Timeout(ms),2000

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZStage,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,BFShutter
Property,Core,Focus,ZStage
Property,Core,XYStage,XYStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# Wheel-A
Label,Wheel_A,9,Filter705
Label,Wheel_A,8,Filterblank3
Label,Wheel_A,7,Open
Label,Wheel_A,6,Filterblank2
Label,Wheel_A,5,Filterblank1
Label,Wheel_A,4,Filter2
Label,Wheel_A,3,Filter1
Label,Wheel_A,2,Filter455
Label,Wheel_A,1,Filter525
Label,Wheel_A,0,Filter605
# Wheel-B
Label,Wheel_B,9,Open2
Label,Wheel_B,8,Filterblank3
Label,Wheel_B,7,Filterblank2
Label,Wheel_B,6,Filterblank1
Label,Wheel_B,5,Open1
Label,Wheel_B,4,Filter350
Label,Wheel_B,3,Filter402
Label,Wheel_B,2,Filter490
Label,Wheel_B,1,Filter555
Label,Wheel_B,0,Filter645

# Configuration presets
# Group: Channel
# Preset: DAPI
ConfigGroup,Channel,DAPI,Core,Shutter,Shutter_B_10_2
ConfigGroup,Channel,DAPI,Wheel_B,Label,Filter350
ConfigGroup,Channel,DAPI,Wheel_A,Label,Filter455

# Preset: GFP
ConfigGroup,Channel,GFP,Core,Shutter,Shutter_B_10_2
ConfigGroup,Channel,GFP,Wheel_B,Label,Filter490
ConfigGroup,Channel,GFP,Wheel_A,Label,Filter525

# Preset: mCherry
ConfigGroup,Channel,mCherry,Core,Shutter,Shutter_B_10_2
ConfigGroup,Channel,mCherry,Wheel_B,Label,Filter555
ConfigGroup,Channel,mCherry,Wheel_A,Label,Filter605

# Preset: iRFP
ConfigGroup,Channel,iRFP,Core,Shutter,Shutter_B_10_2
ConfigGroup,Channel,iRFP,Wheel_B,Label,Filter645
ConfigGroup,Channel,iRFP,Wheel_A,Label,Filter705


# Preset: BF
ConfigGroup,Channel,BF,Core,Shutter,BFShutter
ConfigGroup,Channel,BF,Wheel_B,Label,Filterblank1
ConfigGroup,Channel,BF,Wheel_A,Label,Open

# Preset: RM
ConfigGroup,Channel,RM,Wheel_A,Label,Open
ConfigGroup,Channel,RM,Wheel_B,Label,Filterblank1
ConfigGroup,Channel,RM,Core,Shutter,Fluoshutter

# Preset: ADP
ConfigGroup,Channel,ADP,Core,Shutter,Shutter_B_10_2
ConfigGroup,Channel,ADP,Wheel_B,Label,Filter402
ConfigGroup,Channel,ADP,Wheel_A,Label,Filter525

# Preset: ATP
ConfigGroup,Channel,ATP,Core,Shutter,Shutter_B_10_2
ConfigGroup,Channel,ATP,Wheel_B,Label,Filter490
ConfigGroup,Channel,ATP,Wheel_A,Label,Filter525


# PixelSize settings

